# Feature: reaction-center symmetry on an MM(kcat,Km) rate law — an enzyme
#          disassembling a symmetric homodimer, so BNG2 emits
#          symmetry_factor="0.5" on a rule whose rate law is Michaelis-Menten.
# Tests:   that the factor reaches the MM branch of compute_propensity, and
#          that it lands on the substrate COUNT rather than on the finished
#          propensity:
#
#            S = a_used * symmetry_factor
#            a = kcat*sFree*E/(Km+sFree)
#
#          The substrate pattern S(d!1).S(d!1) has a non-trivial
#          reaction-center automorphism, so it matches each dimer twice and
#          `a_used` is 2x the number of substrate complexes.  MM is not
#          linear in that count: dropping the factor is exact only deep in
#          saturation, and scaling the finished propensity instead is exact
#          only below it.  This model sits at S ~ Km, where a(2N)/a(N) = 4/3
#          and both wrong forms are ~1/3 off in opposite directions — the
#          worst case for both at once.
#
# Shape:   the freed monomers re-dimerize (Rp), so the substrate pool is
#          buffered at ~99 dimers and the rule's propensity is steady; P
#          counts turnovers.  A model that simply depletes a dimer pool
#          reaches the same verdict but with a third of the contrast, since
#          the discrepancy is then bounded by the pool itself rather than
#          accumulating over the run.
#
# Oracle:  BNG2 network -> ODE.  BNG2's expansion builds the MM reaction
#          from species counts and folds the factor into the reaction
#          multiplicity (2 maps x 0.5 = 1), so its ODE integrates the
#          substrate-count semantics directly.
#
#          Listed in NFSIM_UNRELIABLE: the pinned NFsim release constructs
#          MMRxnClass with baseRate=1 and never calls setBaseRate, so it
#          drops the factor exactly as RM did.  Fixed upstream in bngsim's
#          vendored NFsim (lanl/bngsim#195, fixed in #278), whose MM patch
#          puts the factor on the substrate count for the same reason.
#
#          Measured, Turn at t = 10/20/30 (RM and NFsim: mean of 20 reps):
#            BNG2 ODE               245 / 491 / 736   <- oracle
#            BNG2 SSA (10 reps)     244 / 484 / 731   <- ODE mean is sound here
#            RM (fixed)             246 / 491 / 739
#            RM (before)            333 / 659 / 988   <- 1.34x fast
#            factor on propensity   164 / 332 / 494   <- 0.67x slow
#            NFsim 2.9.3            329 / 663 / 994   <- drops it
#
# Tier:    base.
# Expected: Dim holds near 198 molecules and Free near 2 while Turn
#          accumulates linearly at the MM turnover rate.
# Note:    the factor belongs to whichever reactant pattern the rule
#          transforms.  BNG2 refuses MM on a rule whose two reactant patterns
#          are isomorphic ("Michaelis-Menton type ratelaw requires
#          non-identical reactants"), so the reactant automorphism group is
#          the direct product of the two patterns' own, and a pure-context
#          pattern contributes 1 — BNG2 emits symmetry_factor="1" when only
#          the enzyme is symmetric and the rule leaves it alone.  Here the
#          enzyme is context, so the factor is the substrate's.  The
#          enzyme-slot case (a rule that transforms its second reactant, which
#          is off-spec for MM but which BNG2 writes) is covered by the RD arm
#          of tests/cpp/mm_symmetry_model.bngl.
# invariant: conserved Stot = 200

begin model
begin parameters
    E0    5
    D0    100
    kcat  10.0
    Km    100.0
    kp    10.0
end parameters

begin molecule types
    S(d)
    E()
    P()
end molecule types

begin seed species
    S(d!1).S(d!1)   D0
    E()             E0
    P()             0
end seed species

begin observables
    Molecules  Dim    S(d!1).S(d!1)
    Molecules  Free   S(d)
    Molecules  Turn   P()
    Molecules  Stot   S()
end observables

begin reaction rules
    # Substrate FIRST, enzyme SECOND — NFsim's MM reactant order.  The
    # substrate is the symmetric dimer; the enzyme is pure context.  P is a
    # turnover counter: one per firing, never consumed.
    R:  S(d!1).S(d!1) + E() -> S(d) + S(d) + P() + E()   MM(kcat,Km)
    # Re-dimerization keeps the substrate pool (and so the MM propensity)
    # steady.  Ordinary Ele homodimer rule; its own symmetry_factor="0.5" is
    # the implicit /2 of the homodimer propensity, not this test's subject.
    Rp: S(d) + S(d) -> S(d!1).S(d!1)                     kp
end reaction rules
end model

begin actions
simulate({method=>"nf",t_end=>30,n_steps=>60})
end actions
